<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices>
        <iodevice id="" priority="" tag="sITC" type="ITC18">
            <iochannel capability="ITC18_TTL_ASYCH_OUT00" data_interval="1ms" data_type="digital" direction="output" range_max="5" range_min="0" resolution="1" synchrony="asynchronous" tag="TTL_channel" update_interval="3ms" variable="x" />
        </iodevice>
    </io_devices>
    <variables>
        <variable default_value="1" editable="ALWAYS" full_name="x" logging="WHEN_CHANGED" scope="GLOBAL" tag="x" type="INTEGER" />
    </variables>
    <sounds />
    <stimuli />
    <experiment full_name="ITC_TTL_Direct_control_example" tag="ITC_TTL_Direct_control_example">
        <protocol description="" full_name="Protocol" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="Protocol">
            <block description="" full_name="Block" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="Block">
                <task_system description="" full_name="TS" interruptible="YES" tag="TS">
                    <task_system_state description="" full_name="TSS1" interruptible="YES" tag="TSS1">
                        <action full_name="report message" message="************Start**********" tag="reportStart" type="report" />
                        <action full_name="Assignment_X" tag="Assignment_X" type="assignment" value="1" variable="x" />
                        <action device="sITC" full_name="fullname14" tag="StartIIO" type="start_device_IO" />
                        <transition full_name="goToTSS2" tag="goToTSS2" target="TSS2" type="direct" />
                    </task_system_state>
                    <task_system_state description="" full_name="TSS2" interruptible="YES" tag="TSS2">
                        <action full_name="report message" message="************TTL low**********" tag="report message" type="report" />
                        <action full_name="Assignment_X" tag="Assignment_X" type="assignment" value="0" variable="x" />
                        <action duration="5000ms" full_name="startTimer" tag="startTimer" timer="timer" type="start_timer" />
                        <transition full_name="goToTSS3" tag="goToTSS3" target="TSS3" timer="timer" type="timer_expired" />
                    </task_system_state>
                    <task_system_state description="" full_name="TSS3" interruptible="YES" tag="TSS3">
                        <action full_name="report message" message="************End**********" tag="report message" type="report" />
                        <action full_name="Assignment_X" tag="Assignment_X" type="assignment" value="0" variable="x" />
                        <action device="sITC" full_name="stopIO" tag="stopIO" type="stop_device_IO" />
                        <transition full_name="yielder" tag="yielder" type="yield" />
                    </task_system_state>
                </task_system>
            </block>
        </protocol>
    </experiment>
</monkeyml>
